PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  expName = solo project
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome! In this experiment, you will perform a series of tasks under two conditions: with music and in silence. Press space to begin.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine nosound
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 00
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      text [set every repeat]:
        $Task
    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 00
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    TextComponent submit_text_2
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      startVal [time (s)] = 00
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      text:
        click to submit
    MouseComponent mouse_2
      clickable = submit_text_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 00
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  Routine sound_2
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    SoundComponent audioStim_2
      sound [set every repeat] = B
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $Task
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        click to submit
    MouseComponent mouse
      clickable = submit_text
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine trial_2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Get ready for the next condition. Press space to continue.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participating! Press space to end.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator task_loop loopType="TrialHandler"
    conditionsFile = C:/Users/admin/Documents/task.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Task': 'Solve: 5+3', 'corrAns': 8},
      {'Task': 'Solve: 12-4', 'corrAns': 8},
      {'Task': 'Solve: 3*2', 'corrAns': 6},
      {'Task': 'Solve: 16/4', 'corrAns': 4},
      {'Task': 'Solve: 7+6', 'corrAns': 13},
      {'Task': 'Solve: 3*3', 'corrAns': 9},
      {'Task': 'Solve: 25*2', 'corrAns': 50},
      {'Task': 'Solve: 81/9', 'corrAns': 9},
      {'Task': 'Solve: 9*3', 'corrAns': 27}]
    Routine sound_2
  LoopTerminator task_loop
  Routine trial_2
  LoopInitiator task_loop2 loopType="TrialHandler"
    conditionsFile = C:/Users/admin/Documents/task.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Task': 'Solve: 5+3', 'corrAns': 8},
      {'Task': 'Solve: 12-4', 'corrAns': 8},
      {'Task': 'Solve: 3*2', 'corrAns': 6},
      {'Task': 'Solve: 16/4', 'corrAns': 4},
      {'Task': 'Solve: 7+6', 'corrAns': 13},
      {'Task': 'Solve: 3*3', 'corrAns': 9},
      {'Task': 'Solve: 25*2', 'corrAns': 50},
      {'Task': 'Solve: 81/9', 'corrAns': 9},
      {'Task': 'Solve: 9*3', 'corrAns': 27}]
    Routine nosound
  LoopTerminator task_loop2
  Routine end
